PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'first name': '', 'last name': '', 'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 1067]
  color = white
  expName = JDM
  exportHTML = on Save
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine gl_trial
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    TextComponent text
      color = black
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Given the two options shown below, which would you prefer?
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    MouseComponent mouse
      clickable = opt1_text, opt2_text
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent opt1_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt1
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    TextComponent opt2_text
      color = black
      letterHeight = 0.03
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt2
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    TextComponent text_9
      color = black
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = (click one option)
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  Routine prob_trial
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    TextComponent text_2
      color = black
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt_text
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    TextComponent text_3
      color = black
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question_text
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    MouseComponent mouse_2
      clickable = ans1_text, ans2_text, ans3_text
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent ans1_text
      color = black
      letterHeight = 0.03
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ans1
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    TextComponent ans2_text
      color = black
      letterHeight = 0.03
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ans2
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    TextComponent ans3_text
      color = black
      letterHeight = 0.03
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ans3
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    TextComponent text_10
      color = black
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = (click one option)
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  Routine crt_trial
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    TextComponent text_4
      color = black
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    TextboxComponent textbox
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.03
      pos = (0, -.2)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Type your response then press ENTER to submit it.
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    TextComponent text_6
      color = black
      letterHeight = 0.03
      pos = (.3, -.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $unit
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  Routine instructions
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    TextComponent text_7
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will be given a prompt.

        Sometimes, you will need to type in a response. Other times, you will choose between a set of options. Try to answer as quickly and accurately as possible.

        Press the spacebar to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_task
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    CodeComponent code
      Code Type = JS
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      Begin JS Routine:
        // Disable saving results to Pavlovia
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS.experiment._experimentName + '_' + util.toString(expInfo["participant"]) + '.csv';

        // Extract and convert data to CSV
        let dataObj = psychoJS.experiment._trialsData;
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => { return Object.values(it).toString() }).join('\n');

        // Trigger download
        let link = document.createElement('a');
        link.setAttribute('href', 'data:text/csv;charset=utf-8,' + encodeURI(data));
        link.setAttribute('download', filename);
        link.style.display = 'none';
        document.body.appendChild(link);
        link.click();
        document.body.removeChild(link);
    TextComponent text_8
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = That is the end of the task.
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  Routine blank250
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if t > .25:
            continueRoutine = False
Flow
  Routine instructions
  LoopInitiator crt_trials loopType="TrialHandler"
    conditionsFile = crt_items.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item_number': 1, 'item': 'A bat and a ball cost $1.10 in total. The bat costs $1.00 more than the ball. How much does the ball cost?', 'unit': 'cents', 'type': 'crt'},
      {'item_number': 2, 'item': 'If it takes 5 machines 5 minutes to make 5 widgets, how long would it take 100 machines to make 100 widgets?', 'unit': 'minutes', 'type': 'crt'},
      {'item_number': 3, 'item': 'In a lake, there is a patch of lily pads. Every day, the patch doubles in size. If it takes 48 days for the patch to cover the entire lake, how long would it take for the patch to cover half of the lake?', 'unit': 'days', 'type': 'crt'},
      {'item_number': 4, 'item': 'If you’re running a race and you pass the person in second place, what place are you in?', 'unit': 'place', 'type': 'crt'},
      {'item_number': 5, 'item': 'A farmer had 15 sheep and all but 8 died. How many are left?', 'unit': 'sheep', 'type': 'crt'},
      {'item_number': 6, 'item': 'Emily’s father has three daughters. The first two are named April and May. What is the third daughter’s name?', 'unit': ' ', 'type': 'crt'},
      {'item_number': 7, 'item': 'How many cubic feet of dirt are there in a hole that is 3’ deep x 3’ wide x 3’ long?', 'unit': 'feet', 'type': 'crt'},
      {'item_number': 8, 'item': 'A cargo hold of a ship had 500 crates of oranges. At the ship’s first stop, 100 crates were unloaded. At the second stop, 200 more were unloaded. How many crates of oranges were left after the second stop?', 'unit': 'crates', 'type': 'decoy'}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
    Routine crt_trial
    Routine blank250
  LoopTerminator crt_trials
  LoopInitiator prob_trials loopType="TrialHandler"
    conditionsFile = jdm_questions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('prompt_text', 'I flip a fair coin 6 times. Which outcome is more likely?'), ('question_text', 'Which outcome is more likely (H = heads, T = tails)'), ('ans1', 'H H T T H T'), ('ans2', 'H H H T T T'), ('ans3', 'equally likely')]),
      OrderedDict([('prompt_text', 'Linda is 31 years old, single, outspoken, and very bright. She majored in philosophy. As a student, she was deeply concerned with issues of discrimination and social justice, and also participated in anti-nuclear demonstrations.'), ('question_text', 'Which is more likely?'), ('ans1', 'Linda is a bank teller.'), ('ans2', 'Linda is a bank teller who is active in the feminist movement.'), ('ans3', 'equally likely')]),
      OrderedDict([('prompt_text', 'A certain town is served by two hospitals. In the larger hospital about 45 babies are born each day, and in the smaller hospital about 15 babies are born each day. In the larger hospital about 45 babies are born each day, and in the smaller hospital about 15 babies are born each day. As you know, about 50 percent of all babies are boys. However, the exact percentage varies from day to day. Sometimes it may be higher than 50 percent, sometimes lower. For a period of 1 year, each hospital recorded the days on which more than 60 percent of the babies born were boys.'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
    Routine prob_trial
    Routine blank250
  LoopTerminator prob_trials
  LoopInitiator gl_trials loopType="TrialHandler"
    conditionsFile = gain_loss.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'opt1': 'Sure gain of $10', 'opt2': '50% chance of winning $12', 'ev1': 10, 'ev2': 6},
      {'opt1': 'Sure gain of $10', 'opt2': '50% chance of winning $15', 'ev1': 10, 'ev2': 7.5},
      {'opt1': 'Sure gain of $10', 'opt2': '50% chance of winning $20', 'ev1': 10, 'ev2': 10},
      {'opt1': 'Sure gain of $10', 'opt2': '50% chance of winning $25', 'ev1': 10, 'ev2': 12.5},
      {'opt1': 'Sure gain of $10', 'opt2': '50% chance of winning $30', 'ev1': 10, 'ev2': 15},
      {'opt1': 'Sure gain of $20', 'opt2': '50% chance of winning $24', 'ev1': 20, 'ev2': 12},
      {'opt1': 'Sure gain of $20', 'opt2': '50% chance of winning $30', 'ev1': 20, 'ev2': 15},
      {'opt1': 'Sure gain of $20', 'opt2': '50% chance of winning $40', 'ev1': 20, 'ev2': 20},
      {'opt1': 'Sure gain of $20', 'opt2': '50% chance of winning $50', 'ev1': 20, 'ev2': 25},
      {'opt1': 'Sure gain of $20', 'opt2': '50% chance of winning $60', 'ev1': 20, 'ev2': 30},
      {'opt1': '50% chance of winning $12', 'opt2': 'Sure gain of $10', 'ev1': 6, 'ev2': 10},
      {'opt1': '50% chance of winning $15', 'opt2': 'Sure gain of $10', 'ev1': 7.5, 'ev2': 10},
      {'opt1': '50% chance of winning $20', 'opt2': 'Sure gain of $10', 'ev1': 10, 'ev2': 10},
      {'opt1': '50% chance of winning $25', 'opt2': 'Sure gain of $10', 'ev1': 12.5, 'ev2': 10},
      {'opt1': '50% chance of winning $30', 'opt2': 'Sure gain of $10', 'ev1': 15, 'ev2': 10},
      {'opt1': '50% chance of winning $24', 'opt2': 'Sure gain of $20', 'ev1': 12, 'ev2': 20},
      {'opt1': '50% chance of winning $30', 'opt2': 'Sure gain of $20', 'ev1': 15, 'ev2': 20}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
    Routine gl_trial
    Routine blank250
  LoopTerminator gl_trials
  Routine end_task
